//__author__    = 'Nicolas Renier, Christoph Kirst <christoph.kirst.ck@gmail.com>'
//__license__   = 'GPLv3 - GNU General Pulic License v3 (see LICENSE)'
//__copyright__ = 'Copyright © 2020 by Christoph Kirst'
//__webpage__   = 'http://idisco.info'
//__download__  = 'http://www.github.com/ChristophKirst/ClearMap2'

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingInternalImagePixelType "float")
(MovingImageDimension 2)

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")
//(Transform "EulerTransform")

(ErodeMask "true" )

(NumberOfResolutions 6)

(HowToCombineTransforms "Compose")
(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")

(WriteTransformParametersEachIteration "false")
(WriteResultImage "true")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false")
(ShowExactMetricValue "false")

//Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 500 )

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(FixedImageBSplineInterpolationOrder 3)
(UseRandomSampleRegion "false")
(NumberOfSpatialSamples 4000 )
(ResultImageFormat "nhdr")

